PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'EEG 2017', u'participant': u'00', u'file': u'A'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  expName = EEG 2017
  Screen = 1
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Routines
  Routine test2
    TextComponent Divider2
      text = +
      stopVal [duration (s)] = 1.2
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent memory_words2
      text [set every repeat] = $words
      stopVal [duration (s)] = 2.0
      pos = [0, 0.05]
      startVal [time (s)] = 1.2
      letterHeight = 0.2
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  Routine final_test_instr
    TextComponent Final_Ins_Title
      text = Test final
      stopVal [duration (s)] = 15
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent text
      stopVal [duration (s)] = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        • Recuerdo de las 3 listas de palabras
        • Recuerde: el orden de las palabras no importa
        • Tiene 90 segundos para completar la actividad
    TextComponent finalcount_10
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 5
      pos = [0.75, -0.6]
      startVal [time (s)] = 10
      letterHeight = 0.15
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  Routine Baseline
    TextComponent Baseline_Title
      text = Punto de referencia
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent baselne_instructions
      text = Quédese sentado tranquilamente durante 20 segundos mientras medimos el punto de referencia de sus constantes.
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent BaselineStart_key
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent BaselineStart_Prompt
      text = (Admin press '1' to start)
      pos = [0, -.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent FocusDot
      color = #d9d9d9
      text = •
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine instr
    TextComponent Title
      text = Bienvenido
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent Instructions
      pos = [0, 0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Procedimiento del experimento

              a) Test de prueba 1 → Contar → Actividad 1
              b) Test de prueba 2 → Contar → Actividad 2
              c) Test de prueba 3 → Contar → Actividad 3
              d) Actividad de contar extendida
              e) Test final sobre todas las listas de palabras

        Intente recordar todas las palabras de las listas.
    TextComponent Continue
      color = lightblue
      pos = [-0.141, -0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent next_instr_start
      forceEndRoutine = True
      allowedKeys = '1', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Counting_Trial
    TextComponent text_8
      color = lightgreen
      text = Actividad de contar
      stopVal [duration (s)] = 15
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.14
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    TextComponent text_9
      color = lightgreen
      stopVal [duration (s)] = 15
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        • Cuente hacia atrás desde el número de arriba
        • Empiece cuando el número aparezca.
        • Pare cuando el enunciado aparezca.
    TextComponent text_10
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 3
      pos = [0.75, -0.6]
      startVal [time (s)] = 12
      letterHeight = 0.12
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    TextComponent text_11
      color = lightblue
      text = 240
      stopVal [duration (s)] = 10
      pos = [0, 0.35]
      startVal [time (s)] = 5
      letterHeight = 0.15
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  Routine rest
    TextComponent FocusA
      color = lightblue
      text = •
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    TextComponent FocusB
      text = •
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 3.0
      letterHeight = 0.6
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    TextComponent Rest_Period
      color = darkgrey
      text = •
      stopVal [duration (s)] = 360.0
      startVal [time (s)] = 6.0
      letterHeight = 0.6
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    TextComponent FocusC
      text = •
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 16
      letterHeight = 0.6
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    TextComponent FocusD
      color = lightblue
      text = •
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 19
      letterHeight = 0.6
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  Routine instr_test
    TextComponent Test_Instr_Title
      text = Entre los tests
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent Test_Instructions
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Si la actividad es un test:
        • Escriba todas las palabras que recuerde.
        • No es necesario recordar el orden.

        Si la actividad es una revisión:
        • Reexaminar las palabras presentadas

        Tenga en cuenta que:
        • El experimento avanza automáticamente
        • Las actividades duran 60 segundos
    TextComponent Continue2
      color = lightblue
      pos = [0, -0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent next_test_instr
      forceEndRoutine = True
      allowedKeys = '1', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Review2
    TextComponent Review2_Title
      stopVal [duration (s)] = 60
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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      text:
        Review
    TextComponent Review2_words
      stopVal [duration (s)] = 60
      pos = [-0.45, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        deed
        science
        prayer
        safety
        bloom
    TextComponent Review2_words2
      stopVal [duration (s)] = 60
      pos = [-0.15, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        fun
        warmth
        gift
        odour
        angle
    TextComponent R2_5
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 10
      pos = [0.75, -0.5]
      startVal [time (s)] = 50
      letterHeight = 0.15
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    TextComponent Review2_words3
      stopVal [duration (s)] = 60
      pos = [0.15, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        comrade
        event
        fault
        goddess
        charm
    TextComponent Review2_words4
      stopVal [duration (s)] = 60
      pos = [0.45, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        joke
        crime
        poetry
        custom
        exhaust
  Routine Review1
    TextComponent Review1_Title
      text = Review
      stopVal [duration (s)] = 60
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent Review1_words
      stopVal [duration (s)] = 60
      pos = [-0.45, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        item
        volume
        decree
        quest
        unit
    TextComponent Review1_words2
      stopVal [duration (s)] = 60
      pos = [-0.15, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        maker
        assault
        code
        shock
        lecture
    TextComponent R1_1
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 5
      pos = [0.75, -0.5]
      startVal [time (s)] = 55
      letterHeight = 0.15
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    TextComponent Review1_words3
      stopVal [duration (s)] = 60
      pos = [0.15, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        series
        product
        captive
        victim
        fortune
    TextComponent Review1_Words4
      stopVal [duration (s)] = 60
      pos = [0.45, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        pledge
        humour
        folly
        genius
        menace
  Routine thank_you
    TextComponent Title_Thank_You
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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      text:
        Gracias!
        (Press '1' to end)
    KeyboardComponent next_thankyou
      forceEndRoutine = True
      allowedKeys = '1','return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Distractor_Task
    TextComponent Distractor_Title
      color = lightgreen
      text = Actividad de contar hacia atrás
      stopVal [duration (s)] = 60
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent Distractor_number
      color = lightblue
      text = 249
      stopVal [duration (s)] = 60
      pos = [0, 0.35]
      startVal [time (s)] = 0.0
      letterHeight = 0.18
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    TextComponent Distractor_instructions
      color = lightgreen
      text = Reste 3 del número de encima cada vez que vea un punto rojo. Escriba el resultado en la ventana de respuesta. 
      stopVal [duration (s)] = 60
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent white_dot
      text = •
      stopVal [duration (s)] = 60
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    TextComponent red_dot2
      color = red
      text = •
      stopVal [duration (s)] = 0.2
      pos = [0, -0.5]
      startVal [time (s)] = 9
      letterHeight = 0.5
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    TextComponent red_dot3
      color = red
      text = •
      stopVal [duration (s)] = 0.2
      pos = [0, -0.5]
      startVal [time (s)] = 30
      letterHeight = 0.5
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    TextComponent red_dot4
      color = red
      text = •
      stopVal [duration (s)] = 0.2
      pos = [0, -0.5]
      startVal [time (s)] = 13.5
      letterHeight = 0.5
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    TextComponent red_dot5
      text = •
      stopVal [duration (s)] = 0.3
      pos = [0, -0.5]
      startVal [time (s)] = 34
      letterHeight = 0.5
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    TextComponent red_dot6
      color = red
      text = •
      stopVal [duration (s)] = 0.2
      pos = [0, -0.5]
      startVal [time (s)] = 20
      letterHeight = 0.5
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    TextComponent count_5
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 10
      pos = [0.75, -0.6]
      startVal [time (s)] = 50
      letterHeight = 0.15
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    TextComponent red_dot7
      color = red
      text = •
      stopVal [duration (s)] = 0.2
      pos = [0, -0.5]
      startVal [time (s)] = 25
      letterHeight = 0.5
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    TextComponent red_dot8
      color = red
      text = •
      stopVal [duration (s)] = 0.2
      pos = [0, -0.5]
      startVal [time (s)] = 46
      letterHeight = 0.5
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  Routine trial_ans_instr
    TextComponent stop_trial
      text = •
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    TextComponent stop_trial2
      color = lightblue
      text = •
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 2.5
      letterHeight = 0.6
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    TextComponent trial_answer_instructions
      startVal [time (s)] = 5
      letterHeight = 0.12
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      text:
        On the next screen type the words you remember.

        Hit enter after each word.
    TextComponent title_trial_ans_instr
      text = INSTRUCTIONS
      pos = [-.02, 0.6]
      startVal [time (s)] = 5.0
      letterHeight = 0.2
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    KeyboardComponent next_trial_test_ans
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent space_continue
      color = lightblue
      text = Press SPACE to continue
      pos = [0, -0.65]
      startVal [time (s)] = 5
      letterHeight = 0.1
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  Routine Counting3
    TextComponent text_16
      color = lightgreen
      text = Actividad de contar
      stopVal [duration (s)] = 30
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent text_17
      color = lightgreen
      stopVal [duration (s)] = 30
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
         Cuente hacia atrás desde el número de arriba
        • Empiece cuando el número aparezca.
        • Pare cuando el enunciado aparezca.
    TextComponent text_18
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 3
      pos = [0.75, -0.6]
      startVal [time (s)] = 27
      letterHeight = 0.15
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    TextComponent text_19
      color = lightblue
      text = 319
      stopVal [duration (s)] = 25
      pos = [0, 0.35]
      startVal [time (s)] = 5
      letterHeight = 0.15
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    KeyboardComponent key_resp_9
      stopVal [duration (s)] = 30
      forceEndRoutine = True
      allowedKeys = '1', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Review_Trial
    TextComponent Review_Title
      text = Actividad de reexamen
      stopVal [duration (s)] = 10
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent Words
      stopVal [duration (s)] = 10
      pos = [-0.2, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        ejemplo
        ejemplo
    TextComponent Words2
      stopVal [duration (s)] = 10
      pos = [0.2, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        ejemplo
        ejemplo
    TextComponent T2
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 5
      pos = [0.75, -0.6]
      startVal [time (s)] = 5
      letterHeight = 0.15
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  Routine test1_ans
    PolygonComponent rectangle_ans_box
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 60
      pos = [-0.13, -0.11]
      startVal [time (s)] = 0.0
      size = [3, 0.55]
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    CodeComponent code_2
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_4.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == '!' and len(inputText) > 2:
                # pressing 1 means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'return':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'comma':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent ans_page_title_test1
      text = Actividad de memoria
      stopVal [duration (s)] = 60
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent text_4
      color = grey
      text [set every frame] = $(str(word) + '\n' + inputText)
      stopVal [duration (s)] = 60
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent Timer_5
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 5
      pos = [0.75, -0.6]
      startVal [time (s)] = 55
      letterHeight = 0.15
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    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 60
      forceEndRoutine = False
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instr_rest
    TextComponent Rest_Condition_Title
      text = INSTRUCTIONS
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent next_cond_instr
      forceEndRoutine = True
      allowedKeys = '1','space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Rest_Condition
      text [set every frame] = During this break you'll be asked to relax for six minutes.
      pos = [0.01, 0.30]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Rest_Instructions
      pos = [0.01, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        • Sit with back straight and relax.
        • Keep your eyes open.
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine test
    TextComponent Divider
      text [set every repeat] = +
      stopVal [duration (s)] = 1.2
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent memory_words
      text [set every repeat] = $words
      stopVal [duration (s)] = 2
      pos = [0, 0.05]
      startVal [time (s)] = 1.2
      letterHeight = 0.2
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  Routine Distractor_Ans
    PolygonComponent rectangle
      fillColor = $[4,55,4]
      stopVal [duration (s)] = 10
      pos = [-0.13, -0.11]
      startVal [time (s)] = 0.0
      size = [3, 0.55]
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    TextComponent DistractAns_Title
      color = lightgreen
      text = Número final
      stopVal [duration (s)] = 10
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.14
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    KeyboardComponent key_resp_6
      stopVal [duration (s)] = 10
      forceEndRoutine = False
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_4
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_3.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == '1' and len(inputText) > 2:
                # pressing 1 means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'return':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'comma':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent Answer_text
      color = grey
      text [set every frame] = $(str(word) + '\n' + inputText)
      stopVal [duration (s)] = 10
      pos = [-0.5, -0.027]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent count5
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 3
      pos = [0.75, -0.6]
      startVal [time (s)] = 7
      letterHeight = 0.15
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  Routine trial_start
    TextComponent Trial_Start
      text = Práctica
      stopVal [duration (s)] = 5
      pos = [0.0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent text_2_divider
      text = +
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine instr_ans
    TextComponent Stop_Test1
      text = •
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 0.0
      letterHeight = 0.6
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    TextComponent Stop_Test1b
      color = lightblue
      text = •
      stopVal [duration (s)] = 2.5
      startVal [time (s)] = 2.5
      letterHeight = 0.6
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    TextComponent Answer_Instructions
      startVal [time (s)] = 5
      letterHeight = 0.12
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      text:
        On the next screen type the words you remember.

        Hit enter after each word.
    TextComponent title_test1_ans_instr
      text = INSTRUCTIONS
      pos = [-.02, 0.6] 
      startVal [time (s)] = 5
      letterHeight = 0.2
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    KeyboardComponent next_test_ans
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent space_continue1a
      color = lightblue
      text = Press SPACE to continue
      pos = [0, -0.65]
      startVal [time (s)] = 5
      letterHeight = 0.1
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  Routine test_start
    TextComponent Test_Start
      text = Inicio del test
      stopVal [duration (s)] = 3
      pos = [0.0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    TextComponent text_divider
      text = +
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine test2_ans
  Routine trial_ans
    PolygonComponent rectangle_ans
      fillColor = $[3,3,3]
      stopVal [duration (s)] = 10
      pos = [-0.13, -0.11]
      startVal [time (s)] = 0.0
      size = [3, 0.70]
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    CodeComponent code
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_3.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == '?' and len(inputText) > 2:
                # pressing ? means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'return':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'comma':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent ans_page_title
      text = Actividad de memoria
      stopVal [duration (s)] = 10
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent text_3
      color = grey
      text [set every frame] = $(str(word) + '\n' + inputText)
      stopVal [duration (s)] = 10
      pos = [-0.5, 0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent cont_text
      color = lightblue
      stopVal [duration (s)] = 10
      pos = [-0.141, -0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 10
      forceEndRoutine = False
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Countdown_2
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 5
      pos = [0.75, -0.6]
      startVal [time (s)] = 5
      letterHeight = 0.15
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  Routine Baseline_Start
    TextComponent Baseline2_Title
      text = Punto de referencia
      stopVal [duration (s)] = 20
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent Baseline2_instr
      text = Quédese sentado tranquilamente durante 20 segundos mientras medimos el punto de referencia de sus constantes.
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent Baseline2_timer
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 20
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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    KeyboardComponent key_resp_10
      stopVal [duration (s)] = 20
      forceEndRoutine = False
      discard previous = False
      allowedKeys [set every repeat] = '1','return','space'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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  Routine quest
    TextComponent quest_page_title
      text = QUESTIONNAIRE
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent text_0
      text [set every frame] = $(str(word) + '\n' + inputText)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent cont_text_quest
      color = lightblue
      text = Press RETURN for next question.
      pos = [-0.141, -0.65]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    KeyboardComponent key_resp_2
      forceEndRoutine = False
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_3
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_3.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return':
                # pressing return to go to next
                continueRoutine = False
                break

            elif theseKeys[i] == 'comma':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
  Routine memory_test_title
    TextComponent MemoryTestTitle
      text = START MEMORY TEST
      stopVal [duration (s)] = 3
      pos = [0.0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.15
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  Routine finaltest_ans
    PolygonComponent rectangle_ans_box2
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 90
      pos = [-0.13, -0.11]
      startVal [time (s)] = 0.0
      size = [3, 0.7]
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    CodeComponent code_5
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        text_4.alignHoriz ='left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == '!' and len(inputText) > 2:
                # pressing 1 means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'return':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'comma':
                inputText += ',' + ' '  # add a comma after each word
                i = i + 1

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
    TextComponent text_20
      text = Actividad final de memoria
      stopVal [duration (s)] = 90
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent text_21
      color = grey
      text [set every frame] = $(str(word) + '\n' + inputText)
      stopVal [duration (s)] = 90
      pos = [-0.5, 0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    TextComponent text_22
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 5
      pos = [0.75, -0.6]
      startVal [time (s)] = 85
      letterHeight = 0.15
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    KeyboardComponent key_resp_7
      stopVal [duration (s)] = 90
      forceEndRoutine = False
      discard previous = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine instr_bb
    TextComponent bb_cond_instr
      text = INSTRUCTIONS
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent next_cond_instr3
      forceEndRoutine = True
      allowedKeys = '1','space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent BB_Condition
      text = During this break you'll be asked to listen to audio for six minutes.
      pos = [0.01, 0.30]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent BB_Instructions
      pos = [0.01, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        • Sit with back straight and relax.
        • Put on the headphones.
        • Keep your eyes open.
        • Tell us if volume is okay.
  Routine slider
    RatingScaleComponent Valence
      pos = 0, 0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = False
      low = 1
      visualAnalogScale = True
      singleClick = True
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    RatingScaleComponent Arousal
      pos = 0, -0.4
      high = 7
      marker = slider
      startVal [time (s)] = 0.0
      size = 1.0
      showAccept = False
      storeRatingTime = False
      forceEndRoutine = False
      low = 1
      visualAnalogScale = True
      singleClick = True
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    ImageComponent Happy
      pos = [0.5, 0.3]
      startVal [time (s)] = 0.0
      image = images/AS_happy.png
      size = [0.2, 0.2]
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    ImageComponent Unhappy
      pos = [-0.5, 0.3]
      startVal [time (s)] = 0.0
      image = images/AS_unhappy.png
      size = [0.2, 0.2]
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    ImageComponent Sleepy
      pos = [-0.5, -0.5]
      startVal [time (s)] = 0.0
      image = images/AS_sleepy.png
      size = [0.2, 0.2]
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    ImageComponent Wideawake
      pos = [0.5, -0.5]
      startVal [time (s)] = 0.0
      image = images/AS_wideawake.png
      size = [0.2, 0.2]
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    ImageComponent Track2
      pos = [0, -0.5]
      startVal [time (s)] = 0.0
      image = images/AS_intensity_cue.png
      size = [0.7, 0.15]
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    ImageComponent Track
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      image = images/AS_intensity_cue.png
      size = [0.7, 0.15]
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = '1','space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_med
    TextComponent med_cond_title
      text = INSTRUCTIONS
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent next_cond_instr2
      forceEndRoutine = True
      allowedKeys = '1','space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent Med_Condition
      text = During this break you'll be asked to meditate for six minutes.
      pos = [0.01, 0.30]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Med_Instructions
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        • Sit with back straight and relax.
        • Breath naturally through belly.
        • Silently count each breath
          - from 1 to 10 and 10 to 1.
        • Repeat counting for break.
        • Keep your eyes open.
  Routine Counting_2
    TextComponent text_12
      color = lightgreen
      text = Actividad de contar
      stopVal [duration (s)] = 30
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent text_13
      color = lightgreen
      stopVal [duration (s)] = 30
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        • Cuente hacia atrás desde el número de arriba
        • Empiece cuando el número aparezca.
        • Pare cuando el enunciado aparezca.
    TextComponent text_14
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 3
      pos = [0.75, -0.6]
      startVal [time (s)] = 27
      letterHeight = 0.15
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    TextComponent text_15
      color = lightblue
      text = 492
      stopVal [duration (s)] = 25
      pos = [0, 0.35]
      startVal [time (s)] = 5
      letterHeight = 0.15
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    KeyboardComponent key_resp_8
      stopVal [duration (s)] = 30
      forceEndRoutine = True
      allowedKeys = '1', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine transition
    TextComponent text_count_back_task
      color = lightgreen
      text = Actividad de contar hacia atrás
      pos = [0, 0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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    TextComponent text_count_back_instructions
      color = lightgreen
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        • Reste 3 del número de encima cada vez que vea un punto rojo.
        • Escriba el resultado en la ventana de respuesta.
        (Admin press 'return' to continue)
    KeyboardComponent key_resp_transition
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '1','return'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine trial
    TextComponent Trial_Divider
      text = +
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent Trial_Words
      text [set every repeat] = $words
      stopVal [duration (s)] = 1.5
      pos = [0, 0.05]
      startVal [time (s)] = 1.5
      letterHeight = 0.2
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  Routine Counting
    TextComponent text_2
      color = lightgreen
      stopVal [duration (s)] = 30
      pos = [0, 0.6]
      startVal [time (s)] = 0
      letterHeight = 0.12
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      text:
        Actividad de contar
    TextComponent text_5
      color = lightgreen
      stopVal [duration (s)] = 30
      pos = [0, -0.05]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        • Cuente hacia atrás desde el número de arriba
        • Empiece cuando el número aparezca.
        • Pare cuando el enunciado aparezca.
    TextComponent text_6
      color = lightblue
      text [set every frame] = $int(round(routineTimer.getTime(),1)) 
      stopVal [duration (s)] = 3
      pos = [0.75, -0.6]
      startVal [time (s)] = 27
      letterHeight = 0.15
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    TextComponent text_7
      color = lightblue
      text = 764
      stopVal [duration (s)] = 25
      pos = [0, 0.35]
      startVal [time (s)] = 5
      letterHeight = 0.15
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Flow
  Routine instr
  Routine instr_test
  Routine trial_start
  LoopInitiator trials_test loopType="TrialHandler"
    conditionsFile = memory_test_trial.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'words': u'ejemplo'},
      {'words': u'ejemplo'},
      {'words': u'ejemplo'}]
    Routine trial
  LoopTerminator trials_test
  Routine Counting_Trial
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = ans_distractor.csv
    loopType = sequential
    nReps = 1
    conditions = [{'word': u'answer:'}]
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    Routine Distractor_Ans
  LoopTerminator trials_5
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ans_trial.csv
    loopType = sequential
    nReps = 1
    conditions = [{'word': u'answers:'}]
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    Routine trial_ans
  LoopTerminator trials
  Routine Review_Trial
  Routine Baseline
  Routine Baseline_Start
  Routine test_start
  LoopInitiator Memory_Test loopType="TrialHandler"
    conditionsFile = memory_test_a.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words': u'item'},
      {'words': u'volume'},
      {'words': u'decree'},
      {'words': u'quest'},
      {'words': u'unit'},
      {'words': u'maker'},
      {'words': u'assault'},
      {'words': u'code'},
      {'words': u'shock'},
      {'words': u'lecture'},
      {'words': u'series'},
      {'words': u'product'},
      {'words': u'captive'},
      {'words': u'victim'},
      {'words': u'fortune'},
      {'words': u'pledge'},
      {'words': u'humour'},
      {'words': u'folly'},
      {'words': u'genius'},
      {'words': u'menace'}]
    Routine test
  LoopTerminator Memory_Test
  Routine Counting
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = ans_distractor1.csv
    loopType = sequential
    nReps = 1
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    Routine Distractor_Ans
  LoopTerminator trials_8
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = ans_test1.csv
    loopType = sequential
    nReps = 1
    conditions = [{'word': u'answers:'}]
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    Routine test1_ans
  LoopTerminator trials_2
  Routine test_start
  LoopInitiator Memory_Test2 loopType="TrialHandler"
    conditionsFile = memory_test_b.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words': u'deed'},
      {'words': u'science'},
      {'words': u'prayer'},
      {'words': u'safety'},
      {'words': u'bloom'},
      {'words': u'fun'},
      {'words': u'warmth'},
      {'words': u'gift'},
      {'words': u'odour'},
      {'words': u'angle'},
      {'words': u'comrade'},
      {'words': u'event'},
      {'words': u'fault'},
      {'words': u'goddess'},
      {'words': u'charm'},
      {'words': u'joke'},
      {'words': u'crime'},
      {'words': u'poetry'},
      {'words': u'custom'},
      {'words': u'exhaust'}]
    Routine test2
  LoopTerminator Memory_Test2
  Routine Counting_2
  LoopInitiator trials_11 loopType="TrialHandler"
    conditionsFile = ans_distractor2.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Distractor_Ans
  LoopTerminator trials_11
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = ans_test2.csv
    loopType = sequential
    nReps = 1
    conditions = [{'word': u'answers:'}]
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    Routine test1_ans
  LoopTerminator trials_4
  Routine test_start
  LoopInitiator Memory_Test3 loopType="TrialHandler"
    conditionsFile = memory_test_c.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'words': u'revolt'},
      {'words': u'array'},
      {'words': u'vision'},
      {'words': u'style'},
      {'words': u'salute'},
      {'words': u'link'},
      {'words': u'vapour'},
      {'words': u'ghost'},
      {'words': u'murder'},
      {'words': u'shadow'},
      {'words': u'excuse'},
      {'words': u'devil'},
      {'words': u'welfare'},
      {'words': u'tribute'},
      {'words': u'patent'},
      {'words': u'disease'},
      {'words': u'errand'},
      {'words': u'impulse'},
      {'words': u'drama'},
      {'words': u'baron'}]
    Routine test2
  LoopTerminator Memory_Test3
  Routine Counting3
  LoopInitiator trials_10 loopType="TrialHandler"
    conditionsFile = ans_distractor3.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Distractor_Ans
  LoopTerminator trials_10
  LoopInitiator Answers_3 loopType="TrialHandler"
    conditionsFile = ans_test3.csv
    loopType = sequential
    nReps = 1
    conditions = [{'word': u'answers:'}]
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    Routine test1_ans
  LoopTerminator Answers_3
  Routine transition
  Routine Distractor_Task
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = ans_distractor4.csv
    loopType = sequential
    nReps = 1
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    Routine Distractor_Ans
  LoopTerminator trials_3
  Routine final_test_instr
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = ans_test4.csv
    loopType = sequential
    nReps = 1
    conditions = [{'word': u'answers:'}]
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    Routine finaltest_ans
  LoopTerminator trials_7
  Routine thank_you
